<PlusConfiguration version="2.8" PlusRevision="Plus-2.8.0.62873a16 - Win32">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="Breast lumpectomy L12 - no auto depth and clip, no continuous tracker save"
      Description="EM sensors: 1 Probe, 2 Reference, 3 Needle, 4 Cautery. Uses Telemed calibration, valid at any depth. Automatic clipping. Recording is supported. Tracking data is continuously recorded."
    />
    
    <Device
      Id="TrackerDevice"
      Type="Ascension3DG"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0"
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Cautery" BufferSize="500" PortName="3" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Needle" />
          <DataSource Id="Cautery" />
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      LocalTimeOffsetSec="0.0"
      Type="TelemedVideo"
      DepthMm="50">
      <DataSources>
        <DataSource 
          Type="Video"
          Id="Video"
          PortUsImageOrientation="UF"
          BufferSize="200"
          AveragedItemsForFiltering="20"
          ClipRectangleOrigin="145 0 0"
          ClipRectangleSize="525 615 1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>

    <Device 
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="LumpNavRecording.mhd"
      EnableCapturingOnStart="FALSE"
      EnableFileCompression="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

    <Device
      Id="CaptureDeviceTracker"
      Type="VirtualCapture"
      BaseFilename="LumpNavTracking.mhd"
      EnableCapturingOnStart="TRUE"
      EnableFileCompression="FALSE"
      RequestedFrameRate="15"
      FrameBufferSize="450" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
<!-- Calibrated on 2023-11-07 in Goodwin Hall-->
    <Transform From="Image" To="Probe" Matrix="
      0.00366469 0.0984197 -0.000540636 45.1799 
      0.00692335 -0.000797456 -0.0982425 -19.74 
      -0.0981774 0.0036175 -0.00694812 23.4017 
      0 0 0 1 " 
    />
    <Transform From="Image" To="TransdPixel" Matrix="
      1 0 0 -256
      0 1 0 0
      0 0 1 0
      0 0 0 1" />
    <Transform From="TransdPixel" To="Transd" Matrix="
      0.098 0 0 0
      0 0.098 0 0
      0 0 0.098 0
      0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- The following transforms are to check if these markers are visible to the camera -->
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="NeedleToTracker" />
	      <Transform Name="CauteryToTracker" />
        
        <Transform Name="TransdToReference" /> <!-- Depth-independent (mm to mm) ultrasound image tracking -->
        
        <Transform Name="NeedleToProbe" />    <!-- For Image to Probe calibration with needle as stylus -->
        <Transform Name="CauteryToNeedle" />  <!-- For cautery calibration in sterile field -->
        
		    <Transform Name="NeedleToReference" />
		    <Transform Name="ImageToReference" /> <!-- Only for debugging! -->
        <Transform Name="ProbeToReference" />
        <Transform Name="CauteryToReference" />
        <Transform Name="TransdToNeedle" />  <!-- For prediction and volume reconstruction -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>