<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="OptiTrack, Telemed C5 - LumpNav test" Description="OptiTrack and Telemed ultrasound." />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker"
      ProjectFile="e:\LumpNav\LumpNav2\Resources\LumpNavDefault.ttp"
      AttachToRunningMotive="FALSE"
	    AcquisitionRate="50"
      MotiveDataDescriptionsUpdateTimeSec="1.0">
      <DataSources>
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Probe" />
		    <DataSource Type="Tool" Id="Reference" />
        <DataSource Type="Tool" Id="Cautery" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Needle" />
          <DataSource Type="Tool" Id="Probe" />
		      <DataSource Type="Tool" Id="Reference" />
          <DataSource Type="Tool" Id="Cautery" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
	  Id="VideoDevice"
	  LocalTimeOffsetSec="0.0"
	  Type="TelemedVideo"
	  DepthMm="90">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
    
  </DataCollection>
  
  <CoordinateDefinitions>
  <!-- The next three transforms define probe calibration at a certain depth.
       Updates for all other depths will be computed in Slicer by updating ImageToTransd. -->
  <Transform From="Image" To="Probe" Matrix="
    0.192094    0.0166529  -0.00607693 -21.4378 
    -0.00632452 0.00260241 -0.192789   -59.4777 
    -0.0165605  0.192173    0.00313736  98.3391 
    0 0 0 1
    " />
  <Transform From="Image" To="TransdPixel" Matrix="
    1 0 0 -256
    0 1 0 0
    0 0 1 0
    0 0 0 1" />
  <Transform From="TransdPixel" To="Transd" Matrix="
    0.19027  0 0 0
    0 0.19027  0 0
    0 0 0.19027  0
    0 0 0        1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
	  MaxTimeSpentWithProcessingMs="50"
	  ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- The following transforms are to check if these markers are visible to the camera -->
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="NeedleToTracker" />
        
        <Transform Name="TransdToReference" /> <!-- Depth-independent (mm to mm) ultrasound image tracking -->
        
        <Transform Name="NeedleToProbe" />    <!-- For Image to Probe calibration with needle as stylus -->
        <Transform Name="CauteryToNeedle" />  <!-- For cautery calibration in sterile field -->
        
		    <Transform Name="NeedleToReference" />
		    <Transform Name="ImageToReference" /> <!-- Only for debugging! -->
        <Transform Name="ProbeToReference" />
        <Transform Name="CauteryToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
