<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="LumpNav2 Demo" Description="OptiTrack and Telemed ultrasound." />
    
   <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Cautery" BufferSize="500" PortName="3" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Needle"/>
          <DataSource Id="Cautery"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
	  Id="VideoDevice"
	  LocalTimeOffsetSec="0.0"
	  Type="TelemedVideo"
	  DepthMm="60">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
    
  </DataCollection>
  
  <CoordinateDefinitions>
  <!-- The next three transforms define probe calibration at a certain depth.
       Updates for all other depths will be computed in Slicer by updating ImageToTransd.
       Calibrated at Goodwin 60 mm depth, 2022-04-08   -->
  <Transform From="Image" To="Probe" Matrix="
    0.00577912 0.115325 0.000966081 43.554 
    0.00350992 -0.00114272 0.115414 -26.1084 
    0.115275 -0.00574681 -0.00356259 -19.8867 
    0 0 0 1 
    " />
  <Transform From="Image" To="TransdPixel" Matrix="
    1 0 0 -256
    0 1 0 0
    0 0 1 0
    0 0 0 1" />
  <Transform From="TransdPixel" To="Transd" Matrix="
    0.19027  0 0 0
    0 0.19027  0 0
    0 0 0.19027  0
    0 0 0        1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
	  MaxTimeSpentWithProcessingMs="50"
	  ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- The following transforms are to check if these markers are visible to the camera -->
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="NeedleToTracker" />
	      <Transform Name="CauteryToTracker" />
        
        <Transform Name="TransdToReference" /> <!-- Depth-independent (mm to mm) ultrasound image tracking -->
        
        <Transform Name="NeedleToProbe" />    <!-- For Image to Probe calibration with needle as stylus -->
        <Transform Name="CauteryToNeedle" />  <!-- For cautery calibration in sterile field -->
        
		    <Transform Name="NeedleToReference" />
		    <Transform Name="ImageToReference" /> <!-- Only for debugging! -->
        <Transform Name="ProbeToReference" />
        <Transform Name="CauteryToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
